PsychoPy2experiment version="2020.2.9"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = typingtask_V2
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text [set every repeat] = $string
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    KeyboardComponent key_resp
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','space','enter','backspace'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      store = all keys
      storeCorrect = True
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    SoundComponent sound_1A
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine thanks
    TextComponent thank_you
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = You're all done - thank you for participating in our study! 
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  Routine rest
    TextComponent break_time
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        You're halfway done! Time for a break.

        The test will automatically resume in 5min, but if you want to start early, place your hands in the ready position and press 'Y' to continue.
    KeyboardComponent start_3
      allowedKeys = 'y'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      store = nothing
      syncScreenRefresh = False
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  Routine feedback
  Routine practice
  Routine practice_intro
    TextComponent instructions
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        During this task you will see strings of text displayed to you. Once the text appears, that is your cue to type the presented text as quickly and as accurately as possible.

        When you are done typing no need to press enter, the next trial will automatically begin. Backspacing will also have no effect, so if you make a mistake, keep typing.

        Let's run through a practice round first.
        Press any key to continue!
    KeyboardComponent start_1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine real_intro
    TextComponent startpoint
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Now you are ready to begin the task!

        Place your hands in the ready position and hit any key to continue.
    KeyboardComponent start_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine hand_reset
    TextComponent reset
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Reset your hands to the home position. 
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Flow
  Routine practice_intro
  LoopInitiator practice_trials loopType="TrialHandler"
    Selected rows = 1,2,3
    conditionsFile = stringbank_V2.xls
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('string', 'there'), ('corrAns', 'there')]),
      OrderedDict([('string', 'think'), ('corrAns', 'think')]),
      OrderedDict([('string', 'about'), ('corrAns', 'about')]),
      OrderedDict([('string', 'would'), ('corrAns', 'would')]),
      OrderedDict([('string', 'lucky'), ('corrAns', 'lucky')]),
      OrderedDict([('string', 'buddy'), ('corrAns', 'buddy')]),
      OrderedDict([('string', 'cheer'), ('corrAns', 'cheer')]),
      OrderedDict([('string', 'theme'), ('corrAns', 'theme')]),
      OrderedDict([('string', 'belly'), ('corrAns', 'belly')]),
      OrderedDict([('string', 'champ'), ('corrAns', 'champ')]),
      OrderedDict([('string', 'puppy'), ('corrAns', 'puppy')]),
      OrderedDict([('string', 'vodka'), ('corrAns', 'vodka')]),
      OrderedDict([('string', 'tithe'), ('corrAns', 'tithe')]),
      OrderedDict([('string', 'therm'), ('corrAns', 'therm')]),
      OrderedDict([('string', 'haole'), ('corrAns', 'haole')]),
      OrderedDict([('string', 'cooed'), ('corrAns', 'cooed')]),
      OrderedDict([('string', 'faqir'), ('corrAns', 'faqir')]),
      OrderedDict([('string', 'druze'), ('corrAns', 'druze')]),
      OrderedDict([('string', 'edthe'), ('corrAns', 'edthe')]),
      OrderedDict([('string', 'heond'), ('corrAns', 'heond')]),
      OrderedDict([('string', 'kremp'), ('corrAns', 'kremp')]),
      OrderedDict([('string', 'isvar'), ('corrAns', 'isvar')]),
      OrderedDict([('string', 'zibja'), ('corrAns', 'zibja')]),
      OrderedDict([('string', 'pykka'), ('corrAns', 'pykka')])]
    Routine trial
    Routine feedback
    Routine hand_reset
  LoopTerminator practice_trials
  Routine real_intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stringbank_V2.xls
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('string', 'there'), ('corrAns', 'there')]),
      OrderedDict([('string', 'think'), ('corrAns', 'think')]),
      OrderedDict([('string', 'about'), ('corrAns', 'about')]),
      OrderedDict([('string', 'would'), ('corrAns', 'would')]),
      OrderedDict([('string', 'lucky'), ('corrAns', 'lucky')]),
      OrderedDict([('string', 'buddy'), ('corrAns', 'buddy')]),
      OrderedDict([('string', 'cheer'), ('corrAns', 'cheer')]),
      OrderedDict([('string', 'theme'), ('corrAns', 'theme')]),
      OrderedDict([('string', 'belly'), ('corrAns', 'belly')]),
      OrderedDict([('string', 'champ'), ('corrAns', 'champ')]),
      OrderedDict([('string', 'puppy'), ('corrAns', 'puppy')]),
      OrderedDict([('string', 'vodka'), ('corrAns', 'vodka')]),
      OrderedDict([('string', 'tithe'), ('corrAns', 'tithe')]),
      OrderedDict([('string', 'therm'), ('corrAns', 'therm')]),
      OrderedDict([('string', 'haole'), ('corrAns', 'haole')]),
      OrderedDict([('string', 'cooed'), ('corrAns', 'cooed')]),
      OrderedDict([('string', 'faqir'), ('corrAns', 'faqir')]),
      OrderedDict([('string', 'druze'), ('corrAns', 'druze')]),
      OrderedDict([('string', 'edthe'), ('corrAns', 'edthe')]),
      OrderedDict([('string', 'heond'), ('corrAns', 'heond')]),
      OrderedDict([('string', 'kremp'), ('corrAns', 'kremp')]),
      OrderedDict([('string', 'isvar'), ('corrAns', 'isvar')]),
      OrderedDict([('string', 'zibja'), ('corrAns', 'zibja')]),
      OrderedDict([('string', 'pykka'), ('corrAns', 'pykka')])]
    Routine trial
    Routine feedback
    Routine hand_reset
  LoopTerminator trials
  Routine rest
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stringbank_V2.xls
    loopType = random
    nReps = 5
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    conditions:
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    Routine trial
    Routine feedback
    Routine hand_reset
  LoopTerminator trials_2
  Routine thanks
