PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test_typingtask_norepeats
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Routines
  Routine thanks
    TextComponent thank_you
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = You're all done - thank you for participating in our study! 
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  Routine rest
    TextComponent break_time
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        You're halfway done! Time for a break.

        The test will automatically resume in 5min, but if you want to start early, place your hands in the ready position and press 'Y' to continue.
    KeyboardComponent start_3
      allowedKeys = 'y'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      store = nothing
      syncScreenRefresh = False
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  Routine feedback
  Routine practice
  Routine practice_intro
    TextComponent instructions
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        During this task you will be typing strings of text displayed to you. Once the text appears, that is your cue to type the presented text as quickly and as accurately as possible.

        When you are done typing no need to press enter, the next trial will automatically begin. Backspacing will also have no effect, so if you make a mistake, just keep typing.

        Between trials you will see an image of hands on a keyboard. This is your cue to return your hands to the home position (index fingers on the F and J keys) between trials.

        Let's run through a practice round first.
        Press any key to continue!
    KeyboardComponent start_1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine real_intro
    TextComponent startpoint
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now you are ready to begin the task!

        Place your hands in the ready position and hit any key to continue.
    KeyboardComponent start_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine hand_reset
    ImageComponent reset_image
      image = home_keyboard.png
      saveStartStop = False
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      texture resolution = 512
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  Routine trial_1
    CodeComponent shuffle_1
      Code Type = Auto->JS
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      Begin Experiment:
        import csv

        stimulus_list = ['there', 'think', 'about', 'would', 'lucky', 'buddy', 'cheer', 'theme', 'belly', 'champ', 'puppy', 'vodka', 'tithe', 'therm', 'haole', 'cooed', 'faqir', 'druze', 'edthe', 'heond', 'kremp', 'isvar', 'zibja', 'pykka'] * 5
        shuffle(stimulus_list)

        # make sure the same target doesn't appear on consecutive trials
        double_stim = False
        list_ok = False

        while list_ok == False:
            for i in range(len(stimulus_list) - 1):
                # check for equal neighbours:
                if stimulus_list[i] == stimulus_list[i + 1]:
                    double_stim = True  # D'oh!
                    break  # can stop checking on this run
            if double_stim == True:
                shuffle(stimulus_list)  # try a new order
                double_stim = False
            else:
                list_ok = True  # Yay! The loop won't run again.

        # path needs to change for each computer
        f = open('/Users/rubi/Downloads/typing_task_V2_eedited/typing_task_V2/shuffled_list1.csv', 'w')
        writer = csv.writer(f)

        headers = ['string', 'corrAns']
        writer.writerow(headers)

        for n in range(120):
            writer.writerow([stimulus_list[n], stimulus_list[n]])

        f.close()
    TextComponent text_1
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $string
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    KeyboardComponent key_resp_1
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','space','enter','backspace'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
      store = all keys
      storeCorrect = True
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    SoundComponent sound_1A_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine trial_2
    CodeComponent shuffle_2
      Code Type = Auto->JS
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      Begin Experiment:
        import csv

        stimulus_list = ['there', 'think', 'about', 'would', 'lucky', 'buddy', 'cheer', 'theme', 'belly', 'champ', 'puppy', 'vodka', 'tithe', 'therm', 'haole', 'cooed', 'faqir', 'druze', 'edthe', 'heond', 'kremp', 'isvar', 'zibja', 'pykka'] * 5
        shuffle(stimulus_list)

        # make sure the same target doesn't appear on consecutive trials
        double_stim = False
        list_ok = False

        while list_ok == False:
            for i in range(len(stimulus_list) - 1):
                # check for equal neighbours:
                if stimulus_list[i] == stimulus_list[i + 1]:
                    double_stim = True  # D'oh!
                    break  # can stop checking on this run
            if double_stim == True:
                shuffle(stimulus_list)  # try a new order
                double_stim = False
            else:
                list_ok = True  # Yay! The loop won't run again.

        # path needs to change for each computer
        f = open('/Users/rubi/Downloads/typing_task_V2_eedited/typing_task_V2/shuffled_list2.csv', 'w')
        writer = csv.writer(f)

        headers = ['string', 'corrAns']
        writer.writerow(headers)

        for n in range(120):
            writer.writerow([stimulus_list[n], stimulus_list[n]])

        f.close()
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $string
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    KeyboardComponent key_resp_2
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','space','enter','backspace'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
      store = all keys
      storeCorrect = True
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    SoundComponent sound_1A_2
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine practice_trial
    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $string
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    KeyboardComponent key_resp_0
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','space','enter','backspace'
      correctAns = $corrAns
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
      store = all keys
      storeCorrect = True
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    SoundComponent sound_1A
      saveStartStop = False
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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Flow
  Routine practice_intro
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = practice_strings.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('string', 'apple'), ('corrAns', 'apple')]),
      OrderedDict([('string', 'buddy'), ('corrAns', 'buddy')])]
    Routine practice_trial
    Routine feedback
    Routine hand_reset
  LoopTerminator practice_trials
  Routine real_intro
  LoopInitiator trials_1 loopType="TrialHandler"
    conditionsFile = shuffled_list1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('string', 'apple'), ('corrAns', 'apple')]),
      OrderedDict([('string', 'buddy'), ('corrAns', 'buddy')]),
      OrderedDict([('string', 'apple'), ('corrAns', 'apple')]),
      OrderedDict([('string', 'buddy'), ('corrAns', 'buddy')]),
      OrderedDict([('string', 'apple'), ('corrAns', 'apple')]),
      OrderedDict([('string', 'buddy'), ('corrAns', 'buddy')]),
      OrderedDict([('string', 'apple'), ('corrAns', 'apple')]),
      OrderedDict([('string', 'buddy'), ('corrAns', 'buddy')]),
      OrderedDict([('string', 'apple'), ('corrAns', 'apple')]),
      OrderedDict([('string', 'buddy'), ('corrAns', 'buddy')])]
    Routine trial_1
    Routine feedback
    Routine hand_reset
  LoopTerminator trials_1
  Routine rest
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = shuffled_list2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('string', 'apple'), ('corrAns', 'apple')]),
      OrderedDict([('string', 'buddy'), ('corrAns', 'buddy')]),
      OrderedDict([('string', 'apple'), ('corrAns', 'apple')]),
      OrderedDict([('string', 'buddy'), ('corrAns', 'buddy')]),
      OrderedDict([('string', 'apple'), ('corrAns', 'apple')]),
      OrderedDict([('string', 'buddy'), ('corrAns', 'buddy')]),
      OrderedDict([('string', 'apple'), ('corrAns', 'apple')]),
      OrderedDict([('string', 'buddy'), ('corrAns', 'buddy')]),
      OrderedDict([('string', 'apple'), ('corrAns', 'apple')]),
      OrderedDict([('string', 'buddy'), ('corrAns', 'buddy')])]
    Routine trial_2
    Routine feedback
    Routine hand_reset
  LoopTerminator trials_2
  Routine thanks
